PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Alter': '', 'Geschlecht (w/m/d/andere)': '', 'Studiengang': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1504, 1003]
  expName = 00_bat_bachelor
  keyboardBackend = ioHub
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Routines
  Routine break_short
    CodeComponent code_block_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_block_msg ='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = loop_trials.data['key_resp_trial.corr'].sum() #.std(), .mean() also available
        p_corr = round(nCorr / 80, 2)*100
        feedback_block_msg = "%i" %p_corr
    TextComponent text_short_break
      color = black
      durationEstim = 30
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inst_dur
      text [set every repeat] = $'Du hast nun Block ' + str(loop_exp.thisN + 1) + ' von ' + str(loop_exp.nRemaining + loop_exp.thisN + 1) + ' abgeschlossen. \n Mache gerne eine kurze Pause. \n \n Mit "Leertaste" geht es weiter'
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    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      durationEstim = 30
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inst_dur
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    TextComponent text_break_reminder
      color = black
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 30
      text = Drücke "Leertaste" um fort zu fahren
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  Routine end_screen
    TextComponent text_end_screen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Du hast es geschafft. Vielen Dank für deine Teilnahme!!

        mit "P" beendest du das Experiment
    KeyboardComponent key_resp_end_screen
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent image_end_screen
      image = $final_slide
      size = [2,2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = norm
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  Routine feedback
    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg = "empty!"
      Begin Routine:
        if key_resp_trial.corr:#stored on last run routine
            feedback_msg = "richtig"
            feedback_msg_color = 'green'
            feedback_dur = 0.6
        else:
            if ((empty_list[index] == empty_list[index-1]) & (index != 0)):
                feedback_msg = "falsch \n \n bei Wiederholungen keine Taste drücken"
                feedback_msg_color = 'red'
                feedback_dur = 1
            else:
                feedback_msg = "falsch"
                feedback_msg_color = 'red'
                feedback_dur = 0.6
    TextComponent text_feedback
      color [set every repeat] = $feedback_msg_color
      durationEstim = 0.6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_dur
      text [set every repeat] = $feedback_msg
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    TextComponent text_richtige_antwort
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $str(correct) + 'wäre korrekt'
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  Routine instructions_experiment
    TextComponent text_instructions_experiment
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Nun geht das eigentliche Experiment los. Beachte, dass die Farben etwas schwieriger zu unterscheiden sein werden. Außerdem wird kein Feedback mehr gegeben.

        Drücke wieder "D", wenn es die gleichen Farben sind und "L", wenn sich die Farben unterscheiden.

        Versuche wieder mindestens 80% der Durchgänge richtig zu beantworten. Du wirst zwischendurch Feedback über deine Leistung erhalten.

        Mit "Leertaste" geht es los :)
    KeyboardComponent key_resp_instructions_experiment
      allowedKeys = 'space', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_final_instructions
      image = instructions_bachelor/final_instruction.JPG
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0.0
      units = norm
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  Routine instruction_screen
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent image_welcome_slide
      image [set every repeat] = $slide
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_temp
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instruction_temp
  Routine stimuli
    CodeComponent code_correct_response
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        # Correct is correct_map set by counterbalance procedure
        if index == 0: # first trial is always go
            if empty_list[index] == "X":
                correct = map_x_key
            elif empty_list[index] == "Y":
                correct = map_y_key
        elif empty_list[index] != empty_list[index-1]: # if go trial
            if empty_list[index] == "X":
                correct = map_x_key
            elif empty_list[index] == "Y":
                correct = map_y_key
        elif empty_list[index] == empty_list[index - 1]: # if nogo trial
            correct = "None"

        # Get type of trial
        if correct == "None":
            trial_type = "nogo"
        else:
            trial_type = "go"
      End Routine:
        thisExp.addData("stimulus", empty_list[index])
        thisExp.addData("correct", correct)
        thisExp.addData("trial_type", trial_type)
    TextComponent stimulus
      color = black
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $empty_list[index]
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    KeyboardComponent key_resp_trial
      allowedKeys [set every repeat] = "d", "l"
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.7
      storeCorrect = True
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  Routine rsi_practice
    CodeComponent code_rsi_prac
      Code Type = Auto->JS
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      Begin Experiment:
        def randrsi():
            x = random.uniform(0, 1)
            return 0.2 if (x > 0.5) else 1
      Begin Routine:
        # check condition of rsi block first
        if rsi_block == 1:
            if loop_rsi_practice.thisN % 2 == 0:
                rsi = 1
            else:
                rsi = 0.2
        else:
            rsi = randrsi()

        # Fixation cross
        if display_fix == 1:
            fix_dur = rsi
        else:
            fix_dur = 0
      End Routine:
        thisExp.addData("rsi", rsi)
    PolygonComponent fixation_cross_practice
      durationEstim = 0.6
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $fix_dur
      units = deg
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    TextComponent text_empty_rsi_practice
      durationEstim = 0.6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rsi
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  Routine instruction_final
    KeyboardComponent key_resp_instruction_final
      allowedKeys = 'space', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent image_instruction_final
      image [set every repeat] = $instruction_final_slide
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_temp_2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instruction_temp
  Routine init_counterbal
    CodeComponent code_set_counterbal
      Code Type = Auto->JS
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      Begin Experiment:
        # this is to determine key mappings
        map_condition = int(expInfo['participant']) % 2

        # Get correct instruction screen
        if map_condition == 0:
            instruction_slide_set = "instructions_loop_d.xlsx"
            instruction_rsi_slide = "./instructions_bat_d/Slide10.png"
            instruction_final_slide = "./instructions_bat_d/Slide7.png"

        else:
            instruction_slide_set = "instructions_loop_l.xlsx"
            instruction_rsi_slide = "./instructions_bat_l/Slide10.png"
            instruction_final_slide = "./instructions_bat_l/Slide7.png"
        final_slide = "./instructions_bat_l/Slide9.png"
        # Get correct key mappings
        if map_condition == 0:
            map_x_key = "d"
            map_y_key = "l"
        else:
            map_x_key = "l"
            map_y_key = "d"
      End Routine:
        thisExp.addData("map_condition", map_condition)
        thisExp.addData("map_x_key", map_x_key)
        thisExp.addData("map_y_key", map_y_key)
  Routine init_index_exp
    CodeComponent code_init_index_exp
      Code Type = Auto->JS
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      Begin Routine:
        index = loop_trials.thisN
      End Routine:
        thisExp.addData("index", index)
  Routine init_index_practice
    CodeComponent code_init_index_prac
      Code Type = Auto->JS
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      Begin Routine:
        index = loop_practice.thisN
      End Routine:
        thisExp.addData("index", index)
  Routine exp_settings
    CodeComponent code_exp_settings
      Code Type = Auto->JS
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      Begin Routine:
        # controls the size of each practice block length
        practice_list_size = 15
        # amount of trials per experimental block
        exp_list_size = 250
        # amount of blocks
        exp_nblocks =  12
        # Want rsi blocked? 1 for yes, 0 for random rsi
        rsi_block = 1
        # Fixation cross?
        display_fix = 1
  Routine generate_list_practice
    CodeComponent code_gen_list_practice
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # Functions for random generation of 1, 0 at specified rate
        def rand50():
            x = random.uniform(0, 1)
            return 1 if (x > 0.5) else 0

        def rand60():
            x = random.uniform(0, 1)
            return 1 if (x > 0.4) else 0

        def rand75():
            x = random.uniform(0, 1)
            return 1 if (x > 0.25) else 0

        def rand90():
            x = random.uniform(0, 1)
            return 1 if (x > 0.1) else 0
      Begin Routine:
        # Create a list of size N to be filled later
        empty_list = ["fill me"] * practice_list_size

        # Create a variable for correct answer to be stored in later
        correct = "replace me"

        # want to generate a list of trial stimuli x,y with mostly alternating patter but some other instances
        # here 1 represents go trial, 0 represents nogo trial
        # I want to always have two go trials between nogo trials
        for i in range(len(empty_list)):
            if i <= 2:
                empty_list[i] = 1 # go trials on first 3
            elif ((empty_list[i-1] == 1) & (empty_list[i-2] == 1)): # if previous trial is go, then 25% chance of nogo
                empty_list[i] = rand60()
            elif ((empty_list[i-1] == 1) & (empty_list[i-2] == 0)): # always want two go trials after a nogo trial
                empty_list[i] = 1
            elif empty_list[i-1] == 0: # if prev trial is nogo
                if empty_list[i-2] == 0: # and two nogo trials in a row, always go with a go trial
                    empty_list[i] = 1
                else: # if only 1 before is nogo, 10 % chance of creating another one
                    empty_list[i] = rand90()

        # now translate 1 and 0 into stimuli
        for i in range(len(empty_list)):
            if i == 0: # first stim is always go trial and x
                empty_list[i] = "X"
            elif empty_list[i] == 1: # if go trial
                if empty_list[i-1] == "X":
                    empty_list[i] = "Y"
                elif empty_list[i-1] == "Y":
                    empty_list[i] = "X"
            elif empty_list[i] == 0: # if nogo trial
                empty_list[i] = empty_list[i-1]
  Routine generate_list_exp
    CodeComponent code_gen_list_exp
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        # Create a list of size N to be filled later
        empty_list = ["fill me"] * exp_list_size

        # Create a variable for correct answer to be stored in later
        correct = "replace me"

        # want to generate a list of trial stimuli x,y with mostly alternating patter but some other instances
        # here 1 represents go trial, 0 represents nogo trial
        # I want to always have two go trials between nogo trials
        for i in range(len(empty_list)):
            if i <= 2:
                empty_list[i] = 1 # go trials on first 3
            elif ((empty_list[i-1] == 1) & (empty_list[i-2] == 1)): # if previous trial is go, then 25% chance of nogo
                empty_list[i] = rand60()
            elif ((empty_list[i-1] == 1) & (empty_list[i-2] == 0)): # always want two go trials after a nogo trial
                empty_list[i] = 1
            elif empty_list[i-1] == 0: # if prev trial is nogo
                if empty_list[i-2] == 0: # and two nogo trials in a row, always go with a go trial
                    empty_list[i] = 1
                else: # if only 1 before is nogo, 10 % chance of creating another one
                    empty_list[i] = rand90()

        # now translate 1 and 0 into stimuli
        for i in range(len(empty_list)):
            if i == 0: # first stim is always go trial and x
                empty_list[i] = "X"
            elif empty_list[i] == 1: # if go trial
                if empty_list[i-1] == "X":
                    empty_list[i] = "Y"
                elif empty_list[i-1] == "Y":
                    empty_list[i] = "X"
            elif empty_list[i] == 0: # if nogo trial
                empty_list[i] = empty_list[i-1]
  Routine rsi_exp
    CodeComponent code_rsi_exp
      Code Type = Auto->JS
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      Before Experiment:
        rsi = "replace me" # replace this later
      Begin Routine:
        # check condition of rsi block first
        if rsi_block == 1:
            if loop_exp.thisN % 2 == 0:
                rsi = 1
            else:
                rsi = 0.2
        else:
            rsi = randrsi()

        # Fixation cross
        if display_fix == 1:
            fix_dur = rsi
        else:
            fix_dur = 0
      End Routine:
        thisExp.addData("rsi", rsi)
    PolygonComponent fixation_cross_exp
      durationEstim = 0.6
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $fix_dur
      units = deg
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    TextComponent text_empty_rsi_exp
      durationEstim = 0.6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rsi
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  Routine instruction_rsi
    KeyboardComponent key_resp_instruction_rsi
      allowedKeys = 'space', 'j'
      durationEstim = 15
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $inst_dur
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    ImageComponent image_instruction_rsi
      durationEstim = 15
      image [set every repeat] = $instruction_rsi_slide
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inst_dur
      units = norm
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    TextComponent text_temp_3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instruction_temp
  Routine display_break
    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Routine:
        # check to see if loop is on last trial if it is, dont show the break/instruction slide
        if loop_exp.nRemaining == 0:
            inst_dur = 0
        else:
            inst_dur = 600
  Routine display_instruction
    CodeComponent code_instruction
      Code Type = Auto->JS
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      Begin Routine:
        # check to see if loop is on last trial if it is, dont show the break/instruction slide
        if loop_rsi_practice.nRemaining == 0:
            inst_dur = 0
        else:
            inst_dur = 600
Flow
  Routine exp_settings
  Routine init_counterbal
  LoopInitiator loop_instruction loopType="TrialHandler"
    conditionsFile = $instruction_slide_set
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instruction_screen
  LoopTerminator loop_instruction
  LoopInitiator loop_rsi_practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine generate_list_practice
    LoopInitiator loop_practice loopType="TrialHandler"
      loopType = sequential
      nReps = practice_list_size
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      Routine init_index_practice
      Routine rsi_practice
      Routine stimuli
      Routine feedback
    LoopTerminator loop_practice
    Routine display_instruction
    Routine instruction_rsi
  LoopTerminator loop_rsi_practice
  Routine instruction_final
  LoopInitiator loop_exp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = exp_nblocks
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    Routine generate_list_exp
    LoopInitiator loop_trials loopType="TrialHandler"
      loopType = sequential
      nReps = exp_list_size
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      Routine init_index_exp
      Routine rsi_exp
      Routine stimuli
    LoopTerminator loop_trials
    Routine display_break
    Routine break_short
  LoopTerminator loop_exp
  Routine end_screen
